PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = pygame
  Data file delimiter = comma
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [2048, 1152]
  clockFormat = iso
  color = -0.7098, -0.7255, -0.7098
  consoleLoggingLevel = exp
  expName = localiser_pilot
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine image_pres
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    CodeComponent compute_block_trial_num
      Code Type = Auto->JS
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      Begin Routine:
        current_trial_number = trials.thisN + 1 # make it start at 1
        # block number should increase one trial AFTER a break_interval trial
        if current_trial_number == 1:
            block_num = 1
        elif (current_trial_number - 1) % break_interval == 0:
            block_num = int((current_trial_number - 1) / break_interval) + 1
        else:
            # otherwise keep previous value
            block_num = block_num

        trial_num = current_trial_number

        log("Block number: ", block_num)
        log("Trial number: ", trial_num)
    CodeComponent bids_image
      Code Type = Auto->JS
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      Each Frame:
        concept_label_img = image_shown.split("\\")[0]
        concept_examplar_img =  image_shown.split("\\")[1]
        bids.schedule_onset(image,
                                block_num=block_num,
                                trial_num=trial_num,
                                type_of_stimulus="image",
                                component_label="image",
                                concept_label = concept_label_img,
                                concept_examplar = concept_examplar_img)
      End Routine:

        bids.mark_offset(image)
    ImageComponent image
      image [set every repeat] = $ "stimuli\\" + image_shown
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur
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    CodeComponent image_trigger_meg
      Code Type = Auto->JS
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      Begin Routine:
        # send trigger
        stim = "image_presentation"

        number = concept_num

        win.callOnFlip(meg_triggers.send_trigger, number, 0.005)
        #meg_triggers.send_trigger(number, 0.005)
  Routine instructions
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    CodeComponent start_trigger_meg
      Code Type = Auto->JS
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      Begin Routine:
        # send trigger for start exp
        stim = "start/end"

        number = trigger_numbers_dict[stim]
        meg_triggers.send_trigger(number, 0.005)
    CodeComponent bids_instruc_01
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part1,
                                #trial_type="localizer",
                                #stim_label="instruction_01")

        bids.schedule_onset(instruction_part1,
                                type_of_stimulus="instructions",
                                component_label="instruction_part1")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part1)
        bids.mark_offset(instruction_part1)
    TextComponent instruction_part1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
           "Welcome to the first part of the experiment. "
            "In this part, you will see different images and hear words. You task is to decide "
            "if the words describe what you see in the images.\n"
            "[Press any button to continue.]"
        )

        if language == "german":
            instruction_part1.text = (
            "Willkommen zum ersten Teil des Experiments. "
            "In diesem Teil sehen Sie verschiedene Bilder und hören Wörter. "
            "Ihre Aufgabe ist es zu entscheiden, ob die Wörter die Dinge beschreiben, die "
            "Sie auf den Bildern sehen.\n"
            "[Drücken Sie eine beliebige Taste, um fortzufahren.]"
        )
    KeyboardComponent continue_button
      allowedKeys = 'y','b','r','g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent control_routine_start_2
      Code Type = Auto->JS
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      Begin Routine:
        if prompt_idx==0:
            continueRoutine = False  # skip this routine when not selected
    CodeComponent bids_feedback_logging
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        bids.schedule_onset(too_slow_msg,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="feedback",
                                component_label="too_slow",
                                wrd_img_match = match_idx,
                                concept_label = word_shown)

        bids.schedule_onset(match_prompt_fdback,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="feedback",
                                component_label="too_slow",
                                wrd_img_match = match_idx,
                                concept_label = word_shown)
      End Routine:
        # add feedback

        bids.mark_offset(too_slow_msg)
        bids.mark_offset(match_prompt_fdback)
    TextComponent match_prompt_fdback
      letterHeight = 0.04
      pos = 0,0
      startVal [time (s)] = 0
      stopVal [duration (s)] = fdback_dur
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    CodeComponent set_matchprompt_fdback
      Code Type = Auto->JS
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      Begin Routine:
        # labels
        if language == "english":
            match_prompt_fdback.text = "match?"
        elif language == "german":
            match_prompt_fdback.text = "richtig?"
    CodeComponent feedback_control
      Code Type = Auto->JS
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      Begin Routine:
        # prepare feedback in form of word color change or too slow message
        feedback_given = False


        if fdback == 1:
            print(key_resp.corr)
            if key_resp.corr==1:
                too_slow_msg.setOpacity(0)
                match_prompt_fdback.setOpacity(1)
                match_prompt_fdback.setColor("green", colorSpace='rgb')

                feedback_given = True



            elif key_resp.corr==0:
                too_slow_msg.setOpacity(0)

                match_prompt_fdback.setColor("red", colorSpace='rgb')
                match_prompt_fdback.setOpacity(1)

                feedback_given = True


            elif key_resp.corr== "m": # no respnse
                too_slow_msg.setOpacity(1)
                match_prompt_fdback.setOpacity(0)

                feedback_given = True

        else:  # if no feedback is desired
            too_slow_msg.setOpacity(0)
            match_prompt_fdback.setColor("white")
    TextComponent too_slow_msg
      durationEstim = 0.2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fdback_dur
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    CodeComponent set_too_slow_msg
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            too_slow_msg.text = "too slow"
        elif language == "german":
            too_slow_msg.text = "zu langsam"
    CodeComponent feedback_trigger_meg
      Code Type = Auto->JS
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      Begin Routine:
        # initialise
        too_slow_msg._trig_sent = False
        match_prompt_fdback._trig_sent = False
      Each Frame:
        stimuli = ["too slow msg", "feedback"]
        stim_objs = [too_slow_msg, match_prompt_fdback]

        for name, obj in zip(stimuli, stim_objs):
            if (
                obj.status == STARTED
                and getattr(obj, "frameNStart", None) == frameN
                and (getattr(obj, "opacity", 1) or 0) > 0
                and not getattr(obj, "_trig_sent", False)
            ):
                # schedule to record onset at the next flip
                win.timeOnFlip(obj, "tStartRefresh")
                #thisExp.timestampOnFlip(obj, f"{obj.name}.started")

                # send trigger on that flip
                trig_num = trigger_numbers_dict[name]
                win.callOnFlip(meg_triggers.send_trigger, trig_num, 0.005)

                # prevent retriggering
                obj._trig_sent = True
                core.wait(0.01)
  Routine instructions_meg
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    CodeComponent bids_instruc_meg
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_meg,
                                #trial_type="localizer",
                                #stim_label="instruction_meg")

        bids.schedule_onset(instruction_meg,
                                type_of_stimulus="instructions",
                                component_label="instruction_meg")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_meg)
        bids.mark_offset(instruction_meg)
    TextComponent instruction_meg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_meg_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_meg.text = (
            "The MEG signal is very sensitive to body and eye movements. "
            "Please try to keep still during the task and save any movements for the breaks. "
            "Also, try to blink as little as possible while the task is running. "
            "Thank you!\n"
            "[Press any button to start the practice trials.]"
        )

        if language == "german":
            instruction_meg.text = (
        "Das MEG-Signal ist sehr empfindlich gegenüber Körper- und Augenbewegungen. "
        "Bitte versuchen Sie, während der Aufgabe so still wie möglich zu bleiben und Bewegungen auf die Pausen zu beschränken. "
        "Versuchen Sie außerdem, während der Aufgabe so wenig wie möglich zu blinzeln. "
        "Vielen Dank!\n"
        "[Drücken Sie eine beliebige Taste, um mit den Übungsdurchgängen zu beginnen.]"
        )
    KeyboardComponent continue_button_5
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_02
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    CodeComponent bids_instruc_02
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part2,
                                #trial_type="localizer",
                                #stim_label="instruction_02")

        bids.schedule_onset(instruction_part2,
                                type_of_stimulus="instructions",
                                component_label="instruction_part2")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part2)

        bids.mark_offset(instruction_part2)
    TextComponent instruction_part2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
            "After each image, you will hear a word. When the word appears, you are "
            "asked to think about if the word matches the object you saw in the previous image "
            "or not. \n"
            "[Press any button to continue.] "
        )

        if language == "german":
            instruction_part2.text = (
           "Zuerst sehen Sie ein Bild, gefolgt von einem gesprochenem Wort. "
            "Entscheiden Sie, ob das Wort zu dem Bild passt, das Sie gerade gesehen haben oder nicht.\n"
           "[Drücken Sie eine beliebige Taste, um fortzufahren.] "
        )
    KeyboardComponent continue_button_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine ITI
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    CodeComponent fix_cross_trigger_meg
      Code Type = Auto->JS
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      Begin Routine:
        # send trigger
        stim = "fixation cross ITI"

        number = trigger_numbers_dict[stim]

        win.callOnFlip(meg_triggers.send_trigger, number, 0.005)
        core.wait(0.01)

        #meg_triggers.send_trigger(number, 0.005)
    CodeComponent bids_ITI_logging
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(fix_cross_2,
                                #trial_type="localizer",
                                #stim_label="fix_cross_after_trial")

        bids.schedule_onset(fix_cross_2,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="fixation cross",
                                component_label="fix_cross_after_trial",
                                wrd_img_match = match_idx,
                                concept_label = word_shown)
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(fix_cross_2)

        bids.mark_offset(fix_cross_2)
    TextComponent fix_cross_2
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ITI_length
      text = +
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  Routine settings
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    CodeComponent functions_imports
      Code Type = Auto->JS
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      Begin Experiment:
        # log function that saves variables to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)

         # import meg_trigger package
        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.enable_printing()
        meg_triggers.set_default_duration(0.005)

        # function for setting triggers when comps appear
        def send_onset_trigger(stim, trig_number):
            # record exact onset on the global clock
            win.timeOnFlip(stim, 'tStartRefresh')
            log(f'{stim}.started')
            send_trigger(trig_number)
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Before Experiment:
        ## all important task parameters to set ##

        # response prompt positions
        possible_prompt_positions = [-0.2, 0.2] # x coordinates

        # duration of image presentation  [s]
        image_dur = 1

        # image - word ISI: interval between image and word [s]
        img_wrd_isi = 0

        # time to make response [s]
        response_time = 1.5

        # left & right response button presentation duration [s]
        side_dur = response_time

        # is there feedback or not
        fdback = 1 # [0 = no, 1 = yes]

        # feedback duration [s]
        fdback_dur = 0.2

        # duration of rest breaks [s]
        break_dur = 30

        # interval of the breaks (every x trials)
        break_interval = 70
        total_block_number = 12

        # trials that you want to prompot on for practice trials
        prompting_trials_prc = {0,2,5,6,10}

        # response - key mapping
        left_key = 'g'
        right_key = 'b'
        possible_keys = [left_key, right_key]

        # language for instruction
        language = 'english' # 'english' or 'german'

        # match /non-match responses or just non-match
        match_responses = 1 # [no "match" responses = 0, "match responses" = 1]

        # switch sides for match / non match mapping
        switch_sides = 0 # [no = 0, yes = 1]
    CodeComponent bids_logging_functions
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BIDS event logger (no Builder BIDS components needed) ---
        from pathlib import Path
        import csv
        import numpy as np
        import atexit

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (add any you want to see in the TSV)
                self.col_order = [
                    "subject", "block_num", "trial_num",
                    "component_label", "onset", "duration",
                    "type_of_stimulus", "concept_label",
                    "concept_examplar",
                    "response_time", "response",
                    "expected_response", "wrd_img_match",
                    "correct"
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # ---- Create the logger once ----
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
    CodeComponent meg_trigger_numbers
      Code Type = Auto->JS
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      Begin Experiment:
        # define which trigger numbers to send
        trigger_numbers_dict = {
        "start/end": 255,
        "image presentation": range(1,22),
        "word presentation": 99,
        "response (button press)": 127,
        "feedback": 96,
        "too slow msg": 95,
        "fixation cross ITI": 94,
        "break_start": 81,
        "break_end": 82
        }
    CodeComponent setup_prompting
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np

        p_prompt = 1/5.0 # on average every 5th trial
        trial_idx = 0
        next_prompt_at = np.random.geometric(p_prompt)   # first feedback trial index (1..∞)
        do_prompting = False
  Routine instructions_03
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    CodeComponent bids_instruc_03
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part3,
                                #trial_type="localizer",
                                #stim_label="instruction_03")


        bids.schedule_onset(instruction_part3,
                                type_of_stimulus="instructions",
                                component_label="instruction_part3")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part3)
        bids.mark_offset(instruction_part3)
    TextComponent instruction_part3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
        "On some trials, you are also asked to explicitly indicate whether a word matches the picture shown before. "
        "The screen will then display “match?”. "
        "Press the left button if the word matches the image you saw before. Press the right "
        "button if there is a mismatch.\n"
        "[Press any button to continue.] "
        )

        if language == "german":
            instruction_part3.text = (
        "In einigen Durchgängen sollen sie zusätzlich explizit angeben, ob ein Wort zum vorherigen Bild passt. "
        "Auf dem Bildschirm erscheint dann „richtig?“. "
        "Wenn das Wort zum Bild passt, drücken Sie die linke Taste. Stimmen "
        "sie nicht überein, drücken sie die rechte Taste.\n"
        "[Drücken Sie eine beliebige Taste, um fortzufahren.]"
        )
    KeyboardComponent continue_button_4
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_end
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    CodeComponent bids_instruc_end
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_end,
                                #trial_type="localizer",
                                #stim_label="instruction_end")

        bids.schedule_onset(instruction_end,
                                type_of_stimulus="instructions",
                                component_label="instruction_end")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_end)
        bids.mark_offset(instruction_end)
    TextComponent instruction_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_end_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_end.text = (
            "You have finished the task. Press any button to exit. "
            "Thank you for participating. "
        )

        if language == "german":
            instruction_end.text = (
            "Sie haben die Aufgabe beendet. Drücken Sie eine beliebige Taste, um zu beenden. "
            "Vielen Dank für Ihre Teilnahme."
        )
    KeyboardComponent continue_button_7
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent end_trigger_meg
      Code Type = Auto->JS
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      End Routine:
        # send trigger for start exp
        stim = "start/end"

        number = trigger_numbers_dict[stim]
        meg_triggers.send_trigger(number, 0.005)
  Routine instructions_startexp
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    CodeComponent bids_instruc_startexp
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_startexp,
                                #trial_type="localizer",
                                #stim_label="instruction_startexp")
      Each Frame:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_startexp)

        bids.schedule_onset(instruction_startexp,
                            type_of_stimulus="instructions",
                            component_label="instruction_start")
      End Routine:
        bids.mark_offset(instruction_startexp)
    TextComponent instruction_startexp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_startexp_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_startexp.text = (
            "You have completed all practice trials. Now the main task will begin. "
            "Always indicate whether the object in the image matches the word. "
            "There will be regular breaks where you can rest for a moment.\n"
            "[Press any key to start the main task.]"
        )

        if language == "german":
            instruction_startexp.text = (
        "Sie haben alle Übungsdurchgänge abgeschlossen. Jetzt beginnt die Hauptaufgabe. "
        "Geben Sie immer an, ob das Objekt im Bild zum Wort passt. "
        "Es wird regelmäßige Pausen geben, in denen Sie sich kurz ausruhen können.\n"
        "[Drücken Sie eine beliebige Taste, um die Hauptaufgabe zu starten.]"
        )
    KeyboardComponent continue_button_6
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine image_pres_prc
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    ImageComponent image_prc
      durationEstim = 1
      image [set every repeat] = $ "stimuli\\practice_images\\" + image_shown
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur
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  Routine ITI_prc
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    TextComponent fix_cross_2_prc
      durationEstim = 1.25
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ITI_length
      text = +
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  Routine break_3
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    CodeComponent definition_breaks
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
           continueRoutine = False
        elif current_trial_number % break_interval!= 0:
            continueRoutine = False
        elif block_num == total_block_number:
             continueRoutine = False
    CodeComponent break_trigger_meg
      Code Type = Auto->JS
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      Begin Routine:
        # send trigger for begin break
        stim = "break_start"

        number = trigger_numbers_dict[stim]

        if continueRoutine == True:
            meg_triggers.send_trigger(number, 0.005)
      End Routine:
        # send trigger for end break
        stim = "break_end"

        number = trigger_numbers_dict[stim]

        if continue_button_8.keys:
            meg_triggers.send_trigger(number, 0.005)
            core.wait(0.01)
    CodeComponent bids_break_logging
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(breaks_instruction,
                                #trial_type="localizer",
                                #stim_label="task_break")


        bids.schedule_onset(breaks_instruction,
                            block_num = block_num,
                            trial_num = trial_num,
                            type_of_stimulus="break",
                            component_label="break_instruction")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(breaks_instruction)

        bids.mark_offset(breaks_instruction)
    TextComponent breaks_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = break_dur
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    CodeComponent set_break_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            breaks_instruction.text = (
            "Break, the task will continue soon.")
        elif language=="german":
             breaks_instruction.text =(
            "Pause, die Aufgabe geht gleich weiter.")
    TextComponent progress_update
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = break_dur
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    CodeComponent progress_update_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            progress_update.text = (
            f"You have completed {block_num} out of "
            f"{total_block_number} blocks.")
        elif language=="german":
            progress_update.text = (
            f"Sie haben {block_num} von "
            f"{total_block_number} Blöcken abgeschlossen.")
    CodeComponent set_progress
      Code Type = Auto->JS
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      Begin Routine:
        timer_break = core.CountdownTimer(break_dur)
      Each Frame:
        frac = 1.0 - (int(timer_break.getTime()) / break_dur)  # 0→1
        progress_bar_breaks.progress = frac
    ProgressComponent progress_bar_breaks
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.4, -0.1)
      progress [set every frame] = frac
      size = (0.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = break_dur
      units = height
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    TextComponent break_end_instruction
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = break_dur
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    CodeComponent set_instruction_end_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            break_end_instruction.text = (
            "The break ended. "
            "Please press any button to restart the task.")
        elif language=="german":
             break_end_instruction.text =(
            "Die Pause ist vorbei. "
            "Drücken sie eine beliebige Taste, um weiterzumachen.")
    KeyboardComponent continue_button_8
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = break_dur
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  Routine sound_pres
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    CodeComponent set_word_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == 'english':
            word_shown = (word_shown_english)

        elif language == 'german':
            word_part1 = (word_shown_german)
            word_part2 = "_german"
            word_shown = word_part1 + word_part2
    SoundComponent spoken_word
      sound [set every repeat] = $ "sounds//" + word_shown + ".mp3"
      startVal [time (s)] = 0.0
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    CodeComponent word_trigger_meg_2
      Code Type = Auto->JS
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      Begin Routine:
        # send trigger
        stim = "word presentation"

        number = trigger_numbers_dict[stim]

        win.callOnFlip(meg_triggers.send_trigger, number, 0.005)
        core.wait(0.01)

        #meg_triggers.send_trigger(number, 0.005)
    CodeComponent bids_word_logging
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(spoken_word,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="word",
                                component_label="word",
                                wrd_img_match = match_idx,
                                concept_label = word_shown)
      End Routine:
        bids.mark_offset(spoken_word)
    TextComponent fix_cross
      letterHeight = 0.08
      startVal [time (s)] = 0
      text = +
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    CodeComponent control_routine_length
      Code Type = Auto->JS
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      Each Frame:
        if spoken_word.status == FINISHED:
            continueRoutine = False
  Routine settings_main_trial
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    CodeComponent setup_prompting_2
      Code Type = Auto->JS
      Begin Experiment:
        #import numpy as np

        #p_prompt = 1/5.0 # on average every 5th trial
        #trial_idx = 0
        #next_prompt_at = np.random.geometric(p_prompt)   # first feedback trial index (1..∞)
        #do_prompting = False
      Begin Routine:
        # start counting trials

        #trial_idx += 1
        #do_prompting = (trial_idx == next_prompt_at)
        #if do_prompting:
            # schedule the *next* prompting trial by adding another random gap
            #next_prompt_at += np.random.geometric(p_prompt)
  Routine prompting
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    CodeComponent control_routine_start
      Code Type = Auto->JS
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      Begin Routine:
        if prompt_idx==0:
            continueRoutine = False  # skip this routine when not selected
    CodeComponent set_matchprompt
      Code Type = Auto->JS
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      Begin Routine:
        # labels
        if language == "english":
            match_prompt.text = "match?"
        elif language == "german":
            match_prompt.text = "richtig?"

        # positions
        prompt_positions_dir = ["left", "right"]

        if switch_sides == 0:
            nonmatch_idx = 1 # match is always right

        if switch_sides == 1:
            nonmatch_idx = prompt_positions_dir.index(nonmatch_pres_side)

        nonmatch_key = possible_keys[nonmatch_idx]
        match_key = possible_keys[~nonmatch_idx]
    TextComponent match_prompt
      durationEstim = 1.5
      letterHeight = 0.04
      pos = 0,0
      startVal [time (s)] = 0
      stopVal [duration (s)] = side_dur
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    CodeComponent allowed_keys
      Code Type = Auto->JS
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      Begin Routine:
        if match_responses == 0:
            allowed_key_list = [nonmatch_key]  # list of allowed keys
        else:
            # default: allow both match and nonmatch responses
            allowed_key_list = [match_key, nonmatch_key]
    KeyboardComponent key_resp
      allowedKeys = allowed_key_list
      durationEstim = 1.5
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0
      stopVal [duration (s)] = response_time
      store = first key
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    CodeComponent code_key_resp
      Code Type = Auto->JS
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      Begin Routine:
        # reset key resp and correct answer
        key_resp.keys = None
        key_resp.corr = None
      End Routine:
        if match_responses == 1:

            if match_idx == 1:
                answer_correct = match_key
            else:  # match_idx == 0
                answer_correct = nonmatch_key

            # Evaluate participant response
            if key_resp.keys is None:
                key_resp.corr = "m"   # no response
            elif key_resp.keys == answer_correct:
                key_resp.corr = 1      # correct response
            else:
                key_resp.corr = 0      # wrong key


        if match_responses == 0:

            if match_idx == 1:
                answer_correct = None
            else:  # match_idx == 0
                answer_correct = nonmatch_key

            # Evaluate participant response
            if key_resp.keys == answer_correct:
                key_resp.corr = 1      # correct response
            else:
                key_resp.corr = 0      # wrong key
    CodeComponent bids_resp_logging
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame

        bids.schedule_onset(match_prompt,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="prompt to respond",
                                component_label="nonmatch_side")
      End Routine:
        # response neeeds to be saved at end of trial
        bids.add_instant(
            "response",
            response=(key_resp.keys if key_resp.keys else None),
            response_time=(key_resp.rt if hasattr(key_resp, "rt") else None),
            correct=(key_resp.corr if hasattr(key_resp, "corr") else "m"),
            expected_response = answer_correct,
            block_num = block_num,
            trial_num = trial_num,
            component_label = "button_pressed"
        )

        bids.mark_offset(match_prompt)
    CodeComponent resp_trigger_meg
      Code Type = Auto->JS
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      Begin Routine:
        if hasattr(key_resp, '_trig_sent'):
            delattr(key_resp, '_trig_sent')
      Each Frame:
        stim = "response (button press)"
        number = trigger_numbers_dict[stim]


        if (key_resp.keys is not None
            and not getattr(key_resp, '_trig_sent', False)):
            log("response given") # also add to log file
            meg_triggers.send_trigger(number)# send trigger on the same flip
            core.wait(0.01)
            key_resp._trig_sent = True
  Routine sound_pres_prc
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    CodeComponent set_word_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == 'english':
            word_shown = (word_shown_english)

        elif language == 'german':
            word_part1 = (word_shown_german)
            word_part2 = "_german"
            word_shown = word_part1 + word_part2
    SoundComponent spoken_word_prc
      sound [set every repeat] = $ "sounds//" + word_shown + ".mp3"
      startVal [time (s)] = 0.0
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    TextComponent fix_cross_3
      letterHeight = 0.08
      startVal [time (s)] = 0
      text = +
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    CodeComponent control_routine_length_prc
      Code Type = Auto->JS
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      Each Frame:
        if spoken_word_prc.status == FINISHED:
            continueRoutine = False
  Routine prompting_prc
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    CodeComponent control_routine_start_prc
      Code Type = Auto->JS
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      Begin Routine:
        if trials_practice.thisN not in prompting_trials_prc:
            continueRoutine = False  # skip this routine when not selected
    CodeComponent set_matchprompt_prc
      Code Type = Auto->JS
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      Begin Routine:
        # labels
        if language == "english":
            match_prompt_prc.text = "match?"
        elif language == "german":
            match_prompt_prc.text = "richtig?"

        # positions
        prompt_positions_dir = ["left", "right"]

        if switch_sides == 0:
            nonmatch_idx = 1 # match is always right

        if switch_sides == 1:
            nonmatch_idx = prompt_positions_dir.index(nonmatch_pres_side)

        nonmatch_key = possible_keys[nonmatch_idx]
        match_key = possible_keys[~nonmatch_idx]
    TextComponent match_prompt_prc
      durationEstim = 1.5
      letterHeight = 0.04
      pos = 0,0
      startVal [time (s)] = 0
      stopVal [duration (s)] = side_dur
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    CodeComponent allowed_keys_prc
      Code Type = Auto->JS
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      Begin Routine:
        if match_responses == 0:
            allowed_key_list = [nonmatch_key]  # list of allowed keys
        else:
            # default: allow both match and nonmatch responses
            allowed_key_list = [match_key, nonmatch_key]
    KeyboardComponent key_resp_prc
      allowedKeys = allowed_key_list
      durationEstim = 1.5
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0
      stopVal [duration (s)] = response_time
      store = first key
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    CodeComponent code_key_resp_prc
      Code Type = Auto->JS
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      Begin Routine:
        # reset key resp and correct answer
        key_resp_prc.keys = None
        key_resp_prc.corr = None
      End Routine:
        if match_responses == 1:

            if match_idx == 1:
                answer_correct = match_key
            else:  # match_idx == 0
                answer_correct = nonmatch_key

            # Evaluate participant response
            if key_resp_prc.keys is None:
                key_resp_prc.corr = "m"   # no response
            elif key_resp_prc.keys == answer_correct:
                key_resp_prc.corr = 1      # correct response
            else:
                key_resp_prc.corr = 0      # wrong key


        if match_responses == 0:

            if match_idx == 1:
                answer_correct = None
            else:  # match_idx == 0
                answer_correct = nonmatch_key

            # Evaluate participant response
            if key_resp_prc.keys == answer_correct:
                key_resp_prc.corr = 1      # correct response
            else:
                key_resp_prc.corr = 0      # wrong key
  Routine feedback_prc
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    CodeComponent control_routine_start_prc_2
      Code Type = Auto->JS
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      Begin Routine:
        if trials_practice.thisN not in prompting_trials_prc:
            continueRoutine = False
    TextComponent match_prompt_fdback_prc
      letterHeight = 0.04
      pos = 0,0
      startVal [time (s)] = 0
      stopVal [duration (s)] = fdback_dur
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    CodeComponent set_matchprompt_fdback_prc
      Code Type = Auto->JS
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      Begin Routine:
        # labels
        if language == "english":
            match_prompt_fdback_prc.text = "match?"
        elif language == "german":
            match_prompt_fdback_prc.text = "richtig?"
    CodeComponent feedback_control_prc
      Code Type = Auto->JS
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      Begin Routine:
        # prepare feedback in form of word color change or too slow message
        feedback_given = False


        if fdback == 1:
            if key_resp_prc.corr==1:
                too_slow_msg_prc.setOpacity(0)
                match_prompt_fdback_prc.setOpacity(1)
                match_prompt_fdback_prc.setColor("green", colorSpace='rgb')

                feedback_given = True

            elif key_resp_prc.corr==0:
                too_slow_msg_prc.setOpacity(0)

                match_prompt_fdback_prc.setColor("red", colorSpace='rgb')
                match_prompt_fdback_prc.setOpacity(1)

                feedback_given = True


            elif key_resp_prc.corr== "m": # no respnse
                too_slow_msg_prc.setOpacity(1)
                match_prompt_fdback_prc.setOpacity(0)

                feedback_given = True

        else:  # if no feedback is desired
            too_slow_msg_prc.setOpacity(0)
            match_prompt_fdback_prc.setColor("white")
    TextComponent too_slow_msg_prc
      durationEstim = 0.2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fdback_dur
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    CodeComponent set_too_slow_msg_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            too_slow_msg_prc.text = "too slow"
        elif language == "german":
            too_slow_msg_prc.text = "zu langsam"
  Routine instructions_04
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    CodeComponent bids_instruc_04
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part3,
                                #trial_type="localizer",
                                #stim_label="instruction_03")


        bids.schedule_onset(instruction_part4,
                                type_of_stimulus="instructions",
                                component_label="instruction_part4")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part3)
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
        "Please respond as quickly and accurately as possible. "
        "We’ll start with some practice trials.\n"
        "[Press any button to continue.] "
        )

        if language == "german":
            instruction_part4.text = (
        "Bitte antworten Sie so schnell und genau wie möglich. "
        "Wir beginnen nun mit einigen Übungsdurchgängen.\n"
        "[Drücken Sie eine beliebige Taste, um fortzufahren.]"
        )
    KeyboardComponent continue_button_9
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  Routine settings
  Routine instructions
  Routine instructions_02
  Routine instructions_03
  Routine instructions_04
  Routine instructions_meg
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = sequences/localiser_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_shown': 'anchor.jpg', 'word_shown_german': 'Anker', 'word_shown_english': 'anchor', 'ITI_length': 0.75, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'ant.jpg', 'word_shown_german': 'Ameise', 'word_shown_english': 'ant', 'ITI_length': 0.89, 'correct_response': 'r', 'match_idx': 1, 'nonmatch_pres_side': 'left'},
      {'image_shown': 'axe.jpg', 'word_shown_german': 'Pferd', 'word_shown_english': 'horse', 'ITI_length': 0.85, 'correct_response': 'y', 'match_idx': 0, 'nonmatch_pres_side': 'left'},
      {'image_shown': 'bus.jpg', 'word_shown_german': 'Bus', 'word_shown_english': 'bus', 'ITI_length': 1.01, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'ball.jpg', 'word_shown_german': 'Gesicht', 'word_shown_english': 'face', 'ITI_length': 1.04, 'correct_response': 'r', 'match_idx': 0, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'banana.jpg', 'word_shown_german': 'Banane', 'word_shown_english': 'banana', 'ITI_length': 0.99, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'glasses.jpg', 'word_shown_german': 'Brille', 'word_shown_english': 'glasses', 'ITI_length': 0.79, 'correct_response': 'r', 'match_idx': 1, 'nonmatch_pres_side': 'left'},
      {'image_shown': 'basket.jpg', 'word_shown_german': 'Korb', 'word_shown_english': 'basket', 'ITI_length': 0.77, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'}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
    Routine image_pres_prc
    Routine sound_pres_prc
    Routine prompting_prc
    Routine feedback_prc
    Routine ITI_prc
  LoopTerminator trials_practice
  Routine instructions_startexp
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_shown': 'pizza\\pizza_23.jpg', 'word_shown_english': 'pizza', 'word_shown_german': 'Pizza', 'ITI_length': 1.16, 'correct_response': 'y', 'match_idx': 1, 'concept_num': 19},
      {'image_shown': 'phones\\phones_36.jpg', 'word_shown_english': 'phones', 'word_shown_german': 'Telefon', 'ITI_length': 0.82, 'correct_response': 'y', 'match_idx': 1, 'concept_num': 18},
      {'image_shown': 'jacket\\jacket_11.jpg', 'word_shown_english': 'car', 'word_shown_german': 'Auto', 'ITI_length': 1, 'correct_response': 'g', 'match_idx': 0, 'concept_num': 15},
      {'image_shown': 'box\\box_34.jpg', 'word_shown_english': 'milk', 'word_shown_german': 'Milch', 'ITI_length': 0.95, 'correct_response': 'g', 'match_idx': 0, 'concept_num': 4},
      {'image_shown': 'chair\\chair_24.jpg', 'word_shown_english': 'chair', 'word_shown_german': 'Stuhl', 'ITI_length': 0.88, 'correct_response': 'y', 'match_idx': 1, 'concept_num': 7},
      {'image_shown': 'pizza\\pizza_10.jpg', 'word_shown_english': 'pizza', 'word_shown_german': 'Pizza', 'ITI_length': 0.87, 'correct_response': 'y', 'match_idx': 1, 'concept_num': 19},
      {'image_shown': 'box\\box_39.jpg', 'word_shown_english': 'box', 'word_shown_german': 'Kiste', 'ITI_length': 1.01, 'correct_response': 'y', 'match_idx': 1, 'concept_num': 4},
      {'image_shown': 'pizza\\pizza_03.jpg', 'word_shown_english': 'pizza', 'word_shown_german': 'Pizza', 'ITI_length': 1, 'correct_response': 'y', 'match_idx': 1, 'concept_num': 19}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
    conditionsFile:
      $ "sequences/localiser_conditions_" + str(expInfo['participant']).zfill(2) + ".xlsx"
    Routine settings_main_trial
    Routine image_pres
    Routine sound_pres
    Routine prompting
    Routine feedback
    Routine ITI
    Routine break_3
  LoopTerminator trials
  Routine instructions_end
