PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 2
  Show mouse = True
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [2048, 1152]
  blendMode = nofbo
  color = -0.7804, -0.7804, -0.7804
  expName = pilot_sequence_learning
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine startup_settings
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    CodeComponent functions_imports
      Code Type = Auto->JS
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      Begin Experiment:
        # log function that saves variables to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)

         # import meg_trigger package
        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.enable_printing()
        meg_triggers.set_default_duration(0.005)

        # function for setting triggers when comps appear
        def send_onset_trigger(stim, trig_number):
            # record exact onset on the global clock
            win.timeOnFlip(stim, 'tStartRefresh')
            #log(f'{stim}.started')
            send_trigger(trig_number)

        from ast import literal_eval

        # define function that matches position keywords to tuples
        def resolve_pos(val):
            """Return a (x,y) tuple from various spreadsheet formats."""
            # Already a tuple/list/ndarray -> normalize to tuple
            if isinstance(val, (list, tuple, np.ndarray)):
                return tuple(val)
            # Name like "left_pos" -> look up
            if isinstance(val, str):
                name = val.strip()
                if name in POS:
                    return POS[name]
                # Or literal like "(-0.4, 0.2)" in the cell
                try:
                    parsed = literal_eval(name)
                    if isinstance(parsed, (list, tuple)) and len(parsed) == 2:
                        return tuple(parsed)
                except Exception:
                    pass
                raise ValueError(f"Unrecognized position value: {val!r}")
            raise TypeError(f"Unsupported position type: {type(val)}")
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Begin Experiment:
        ## set main experimental variables

        # instruction language
        language = "german" # "german" or "english"

        # keys
        left_key = "left"
        center_key = "up"
        right_key = "right"

        # pos of images (x-coord, y-coord)
        left_pos   = (-0.3, 0.15)
        right_pos  = (0.3, 0.15)
        center_pos = (0.0, 0.15)
        prompt_pos = (0, -0.15)

        # # Map positions to keys
        pos_to_key = {
            right_pos: right_key,
            center_pos: center_key,
            left_pos: left_key,
        }
        # pos of instructions
        instruc_pos = (0,0)

        # make coordinates her match with position description in excel file
        POS = {
            'left':   left_pos,
            'center': center_pos,
            'right':  right_pos,
        }

         # timings
        max_response_time = 10 # [s]

         # feedback
        feedback_steps  =  0.04   # steps out of 1
        rest_jump       =  0.004 # abs distance to target pos
        animation_time   = 2.5    # [s]

        # breaks (indicate after whch trial number you want to break)
        break_points = {60, 120}
        break_dur = 30
    CodeComponent bids_logging_functions
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BIDS event logger (no Builder BIDS components needed) ---
        from pathlib import Path
        import csv
        import numpy as np
        import atexit

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (add any you want to see in the TSV)
                self.col_order = [
                    "subject", "block_name", "sequence_name",
                    "route_num",
                    "trial_num", "sequence_name",
                    "component_label",
                    "concept_label", "concept_exemplar",
                    "onset", "duration",
                    "type_of_stimulus",
                    "response_time", "response",
                    "response_meaning", "expected_response",
                    "correct"
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # ---- Create the logger once ----
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
  Routine choice_display
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    CodeComponent bids_choice_disp
      Code Type = Auto->JS
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      Begin Routine:
        # which item sits where on THIS trial
        pos2item = {}
        pos2item[correct_pos]   = 'target'
        pos2item[dist01_pos] = 'distractor_01'
        pos2item[dist02_pos] = 'distractor_02'

        # key -> position mapping
        key2pos = {
            left_key:   'left',
            right_key:  'right',
            center_key: 'center'
        }
      Each Frame:
        ## schedule bids trigger setting
        bids.schedule_onset(prompt, type_of_stimulus="image",
        component_label="current_image",
        concept_label = promptFile.partition("//")[0],
        concept_examplar = promptFile.partition("//")[2],
        block_name=block_name,
        sequence_name=sequence_name,
        route_num=route_num,
        trial_num=trial_num)

        bids.schedule_onset(correct, type_of_stimulus="image",
        component_label="corr_next_image",
        concept_label = correctFile.partition("//")[0],
        concept_examplar = correctFile.partition("//")[2],
        block_name=block_name,
        sequence_name=sequence_name,
        route_num=route_num,
        trial_num=trial_num)

        bids.schedule_onset(dist_01, type_of_stimulus="image",
        component_label="distractor 01 (same seq)",
        concept_label = dist_01File.partition("//")[0],
        concept_examplar = dist_01File.partition("//")[2],
        block_name=block_name,
        sequence_name=sequence_name,
        route_num=route_num,
        trial_num=trial_num)

        bids.schedule_onset(dist_02, type_of_stimulus="image",
        component_label="distractor 02 (diff seq)",
        concept_label = dist_02File.partition("//")[0],
        concept_examplar = dist_02File.partition("//")[2],
        block_name=block_name,
        sequence_name=sequence_name,
        route_num=route_num,
        trial_num=trial_num)
      End Routine:
        bids.mark_offset(prompt)
        bids.mark_offset(correct)
        bids.mark_offset(dist_01)
        bids.mark_offset(dist_02)

        # response neeeds to be saved at end of trial
        pressed = key_resp.keys
        if isinstance(pressed, list):
            pressed = pressed[-1] if pressed else None

        chosen_pos  = key2pos.get(pressed, None)
        chosen_item = pos2item.get(chosen_pos, None)

        is_correct = (chosen_item == 'target') if chosen_item is not None else None

        bids.add_instant(
            "choice",
            response=(key_resp.keys if key_resp.keys else None),
            response_time=(key_resp.rt if hasattr(key_resp, "rt") else None),
            correct=is_correct,
            expected_response = correct_ans,
            response_meaning = chosen_item
        )
    CodeComponent trigger_choice_disp
      Code Type = Auto->JS
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      Each Frame:
        # prompt triggering
        if prompt.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(prompt, promptTrig)

        # dist01 triggering
        if dist_01.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(dist_01, dist_01Trig)

        # dist02 triggering
        if dist_02.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(dist_02, dist_02Trig)

        # correct triggering
        if correct.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(correct, correctTrig)

        # "choose prompt" triggering
        if instructions_choose.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(instructions_choose, 32)
    ImageComponent prompt
      image [set every repeat] = $'stimuli\\' + promptFile
      pos [set every repeat] = prompt_pos
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01
      image [set every repeat] = $'stimuli\\' + dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02
      image [set every repeat] = $'stimuli\\' + dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent correct
      image [set every repeat] = $'stimuli\\' + correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = left_key, center_key, right_key
      correctAns = $correct_ans
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      syncScreenRefresh = False
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    CodeComponent get_response_parameters
      Code Type = Auto->JS
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      Begin Routine:
        # determine which one is correct response on this trial
        # might need later
        correctAnsKey = pos_to_key[resolve_pos(correct_pos)]

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()

        # initialize
        responded = False
        key_resp.keys = []
        key_resp.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp.duration = None
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp.keys = None
            key_resp.rt = None
            responded = False
            continueRoutine = False
            key_resp.corr = None
            # (optionally store that it was a timeout)
            log('response too slow')

        # if there is key selection
        if key_resp.keys:
                key_resp.corr = 1 if key_resp.keys == correctAnsKey else 0
                responded = True
                log('response, correct: ', key_resp.corr)
                continueRoutine = False
    TextComponent instructions_choose
      letterHeight = 0.04
      pos = instruc_pos
      startVal [time (s)] = 0.0
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    CodeComponent instructions_choose_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose.text = (
            "Choose the next image in the sequence!")

        if language == "german":
            instructions_choose.text = (
            "Wähle das nächste Bild in der Sequenz!")
  Routine feedback
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    CodeComponent bids_feedback_disp
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        bids.schedule_onset(correct_2, type_of_stimulus="feedback",
        component_label="correct_moving")
      End Routine:
        #bids.add_instant(
        #    "feedback",
        #    feedback_duration = animationTimer
        #)

        bids.mark_offset(correct_2)
    CodeComponent animation_control
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    CodeComponent trigger_feedback_disp
      Code Type = Auto->JS
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      Begin Routine:
        feedback.trigger_sent = False
      Each Frame:
        # feedback onset
        if moveCorrect and not feedback.trigger_sent:
            send_trigger(98)
            feedback.trigger_sent = True

        # feedback offset
        if animationDone:
            send_trigger(99)
    ImageComponent prompt_2
      image [set every repeat] = $'stimuli\\'  + promptFile
      pos [set every repeat] = prompt_pos
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_2
      image [set every repeat] = $'stimuli\\' + dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_2
      image [set every repeat] = $'stimuli\\'  + dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent correct_2
      image [set every repeat] = $'stimuli\\'  + correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine instructions
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    CodeComponent bids_instruc
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part1,
                                type_of_stimulus="instructions",
                                component_label="instruction_part1")
      End Routine:
        bids.mark_offset(instruction_part1)
    CodeComponent trigger_start
      Code Type = Auto->JS
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      Begin Experiment:
        # set trigger that exp has started
        send_trigger(255)
    TextComponent instruction_part1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
            "Welcome to the second part of the experiment. "
            "In this part, you will learn sequences of images. "
            "You will start with the first image. "
            "Your task is to choose the correct next image in the sequence. "
            "Press any button to continue."
        )


        if language == "german":
            instruction_part1.text = ("Willkommen zum zweiten Teil des Experiments. "
            "In diesem Teil lernen Sie Bildsequenzen kennen. "
            "Sie beginnen mit einem Startbild. "
            "Ihre Aufgabe ist es, aus mehreren Optionen das nächste richtige Bild der Sequenz auszuwählen. "
            "Drücken Sie irgendeinen Knopf, um weiterzumachen. ")
    KeyboardComponent continue_button
      allowedKeys = left_key, center_key, right_key
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_02
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    CodeComponent bids_instruc_2
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part2,
                                type_of_stimulus="instructions",
                                component_label="instruction_part2")
      End Routine:
        bids.mark_offset(instruction_part2)
    TextComponent instruction_part2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
            "After each choice, you will receive feedback: "
        "The correct picture will replace the current one. "
        "Then you select the next picture in the sequence. "
        "Press any button to continue. "
            )


        if language == "german":
            instruction_part2.text = (
           "Nachdem Sie eine Auswahl getroffen haben, erhalten Sie Feedback: "
           "Das richtige Bild ersetzt das aktuelle Startbild. "
            "Anschließend wählen Sie das nächste Bild der Sequenz. "
            "Drücken Sie irgendeinen Knopf, um weiterzumachen."
            )
    KeyboardComponent continue_button_2
      allowedKeys = left_key, center_key, right_key
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_end
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    CodeComponent bids_instruc_6
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_end,
                                type_of_stimulus="instructions",
                                component_label="instruction_end")
      End Routine:
        bids.mark_offset(instruction_end)
    TextComponent instruction_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instructions_end_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
                "This was the experiment. Thank you for your participation! "
                "Press any button to end the task. "
            )



        if language == "german":
            instruction_part3.text = (
                "Hiermit ist das Experiment beendet. Vielen Dank für Ihre Teilnahme. "
                "Drücken Sie irgendeinen Knopf, um das Experiment zu beenden. "
            )
    KeyboardComponent continue_button_3
      allowedKeys = left_key, center_key, right_key
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent trigger_end
      Code Type = Auto->JS
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      End Experiment:
        # set trigger that exp has ended
        send_trigger(255)
  BidsExportRoutine bidsExport
    add_code = False
    add_environment = True
    add_stimuli = True
    data_type = meg
    dataset_name = bids
    generate_hed_metadata = False
    runs = True
  Routine bids_export
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    CodeComponent save_tsv
      Code Type = Auto->JS
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      End Experiment:
        events_path = bids.save(thisExp.dataFileName)  # writes ..._events.tsv
        print(f"BIDS events written to: {events_path}")
  Routine bids_triggers
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  Routine choice_disp_learn
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    ImageComponent prompt_prc
      image [set every repeat] = $'stimuli\\practice_images\\' + promptFile
      pos [set every repeat] = prompt_pos
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc
      image [set every repeat] = $'stimuli\\practice_images\\' + dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc
      image [set every repeat] = $'stimuli\\practice_images\\' + dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc
      image [set every repeat] = $'stimuli\\practice_images\\' + correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_prc
      allowedKeys = left_key, center_key, right_key
      correctAns = $correct_ans
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      syncScreenRefresh = False
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    TextComponent instructions_choose_prc
      letterHeight = 0.04
      pos = instruc_pos
      startVal [time (s)] = 0.0
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    CodeComponent instructions_choose_txt_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose_prc.text = (
            "Choose the next image in the sequence!")

        if language == "german":
            instructions_choose_prc.text = (
            "Wähle das nächste Bild in der Sequenz!")
    PolygonComponent highlight_chosen
      fillColor = none
      shape = rectangle
      size = (0.25, 0.25)
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    CodeComponent determine_chosen_pos
      Code Type = Auto->JS
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      Begin Routine:
        chosen_pos = None
        key2pos = {
            left_key:   'left',
            right_key:  'right',
            center_key: 'center'
        }

        pos2coordinates = {
            "left":   left_pos,
            "right":  right_pos,
            "center": center_pos
        }
      Each Frame:
        if chosen_pos is None:
           highlight_chosen.setAutoDraw(False)   # turns off aperture

        if key_resp_prc.keys:
            pressed = key_resp_prc.keys
            chosen_pos  = key2pos.get(pressed, None)
            highlight_chosen.pos = pos2coordinates[chosen_pos]
            highlight_chosen.setAutoDraw(True)
    CodeComponent code_prc
      Code Type = Auto->JS
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      Begin Routine:
        # determine which one is correct response on this trial
        # might need later
        correctAnsKey = pos_to_key[resolve_pos(correct_pos)]

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()

        # initialize
        responded = False
        key_resp_prc.keys = []
        key_resp_prc.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp_prc.duration = None
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp_prc.keys = None
            key_resp_prc.rt = None
            responded = False
            continueRoutine = False
            key_resp_prc.corr = None
            # (optionally store that it was a timeout)

        # if there is key selection
        if key_resp_prc.keys:
                key_resp_prc.corr = 1 if key_resp_prc.keys == correctAnsKey else 0
                responded = True
                continueRoutine = False
  Routine feedback_learn
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    CodeComponent animation_control_prc
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_prc_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_prc_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_prc_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    ImageComponent prompt_prc_2
      image [set every repeat] = $'stimuli\\practice_images\\' + promptFile
      pos [set every repeat] = prompt_pos
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc_2
      image [set every repeat] = $'stimuli\\practice_images\\' + dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc_2
      image [set every repeat] = $'stimuli\\practice_images\\' + dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc_2
      image [set every repeat] = $'stimuli\\practice_images\\' + correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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  Routine instructions_start
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    CodeComponent bids_instruc_5
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part5,
                                type_of_stimulus="instructions",
                                component_label="instruction_part5")
      End Routine:
        bids.mark_offset(instruction_part5)
    TextComponent instruction_part5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part5_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part5.text = (
            "This is the end of the practice trials. Now the "
            "experiment starts. Remember to choose the next image in the "
            "sequence out of the three options. Try to remember the correct orders. "
            "Press any button to continue."
            )



        if language == "german":
            instruction_part5.text = (
            "Das ist das Ende der Übungsdurchgänge. Jetzt beginnt "
            "das Experiment. Denken Sie daran, das nächste Bild in der "
            "Abfolge aus den drei Optionen auszuwählen. Versuchen Sie, sich die richtige Reihenfolge zu merken. "
            "Drücken Sie eine beliebige Taste, um fortzufahren."
        )
    KeyboardComponent continue_button_5
      allowedKeys = left_key, center_key, right_key
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine task_break
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    CodeComponent definition_breaks
      Code Type = Auto->JS
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      Begin Routine:
        if total_trial_number not in break_points:
           continueRoutine = False
    CodeComponent break_trigger_meg
      Code Type = Auto->JS
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      Each Frame:
        # send trigger for begin break
        stim_trig = 81

        if breaks_instruction.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(breaks_instruction, stim_trig)
      End Routine:
        # send trigger for end break
        stim = "break_end"

        stim_trig = 82

        if continue_button_8.keys:
            meg_triggers.send_trigger(stim_trig, 0.005)
            core.wait(0.01)
    CodeComponent bids_break_logging
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame

        bids.schedule_onset(breaks_instruction,
            type_of_stimulus="break",
            block_name = block_name,
            component_label="break_instruction")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(breaks_instruction)
    TextComponent breaks_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = break_dur
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    CodeComponent set_break_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            breaks_instruction.text = (
            "Break, the task will continue soon.")
        elif language=="german":
             breaks_instruction.text =(
            "Pause, die Aufgabe geht gleich weiter.")
    CodeComponent set_progress
      Code Type = Auto->JS
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      Begin Routine:
        timer_break = core.CountdownTimer(break_dur)
      Each Frame:
        frac = 1.0 - (int(timer_break.getTime()) / break_dur)  # 0→1
        progress_bar_breaks.progress = frac
    ProgressComponent progress_bar_breaks
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.4, -0.1)
      progress [set every frame] = frac
      size = (0.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = break_dur
      units = height
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    TextComponent break_end_instruction
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = break_dur
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    CodeComponent set_instruction_end_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            break_end_instruction.text = (
            "The break ended. "
            "Please press any button to restart the task.")
        elif language=="german":
             break_end_instruction.text =(
            "Die Pause ist vorbei. "
            "Drücken sie eine beliebige Taste, um weiterzumachen.")
    KeyboardComponent continue_button_8
      allowedKeys = left_key, center_key, right_key
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = break_dur
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  Routine set_tracking_parameters
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    CodeComponent set_parameters
      Code Type = Auto->JS
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      Begin Experiment:
        # counters for how many routes of each sequence have started so far
        A_route = 0
        B_route = 0
        C_route = 0
      Begin Routine:
        # total trial number to set break definitions
        total_trial_number = trials.thisN + 1

        # important parameters to store in the.tsv file for every
        # trial of the learning task
        sequence_name = learningSeq
        trial_num = currPosInSeq

        # increment the route counter ONLY at the first trial of each 6-trial route
        if trial_num == 1:
            if sequence_name == "A":
                A_route += 1
            elif sequence_name == "B":
                B_route += 1
            elif sequence_name == "C":
                C_route += 1

        # set route_num for this trial based on the current sequence
        if sequence_name == "A":
            route_num = A_route
        elif sequence_name == "B":
            route_num = B_route
        else:  # "C"
            route_num = C_route

        # decide the block based on your design:
        # Block 1: A routes 1–10
        # Block 2: A routes 11–20, B routes 1–10
        # Block 3: A routes 21–30, B routes 11–20, C routes 1–10
        if sequence_name == "A":
            if route_num <= 10:
                block_name = "Block 1"
            elif route_num <= 20:
                block_name = "Block 2"
            else:
                block_name = "Block 3"
        elif sequence_name == "B":
            if route_num <= 10:
                block_name = "Block 2"
            else:
                block_name = "Block 3"
        else:  # "C"
            block_name = "Block 3"
    CodeComponent log_trial_numbers
      Code Type = Auto->JS
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      Begin Routine:
        # log("current block", block_name)
        log("current sequence: ", sequence_name)
        log("current route: ", route_num)
        log("trial number: ", trial_num)
  Routine instructions_04
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    CodeComponent bids_instruc_4
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part4,
                                type_of_stimulus="instructions",
                                component_label="instruction_part4")
      End Routine:
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
            "First, you will practice the task: "
            "The current picture is shown at the bottom of the screen. "
            "Three possible options appear at the top. "
            "Choose the picture you think comes next in the sequence. "
            "Press any key to start the practice trials."
            )



        if language == "german":
            instruction_part4.text = (
        "Zunächst üben Sie den Ablauf: "
        "Unten auf dem Bildschirm sehen Sie das aktuelle Bild. "
        "Oben erscheinen drei Auswahlmöglichkeiten. "
        "Wählen Sie das Bild, von dem Sie denken, dass es als Nächstes folgt. "
        "Drücken Sie eine beliebige Taste, um mit den Übungsdurchgängen zu beginnen. "
        )
    KeyboardComponent continue_button_4
      allowedKeys = left_key, center_key, right_key
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_03
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    CodeComponent bids_instruc_3
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part3,
                                type_of_stimulus="instructions",
                                component_label="instruction_part3")
      End Routine:
        bids.mark_offset(instruction_part3)
    TextComponent instruction_part3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
           "At the beginning, you do not yet know the correct order. "
           "You will learn it step by step through trial and feedback. "
            "Press any button to continue. "
            )


        if language == "german":
            instruction_part3.text = (
            "Zu Beginn kennen Sie die richtige Abfolge noch nicht. "
            "Sie werden sie Schritt für Schritt durch Ausprobieren und Feedback erlernen. "
            "Drücken Sie irgendeinen Knopf, um weiterzumachen."
            )
    KeyboardComponent continue_button_6
      allowedKeys = left_key, center_key, right_key
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  Routine startup_settings
  Routine instructions
  Routine instructions_02
  Routine instructions_03
  Routine instructions_04
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = sequences/main_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'promptFile': 'anchor.jpg', 'correctFile': 'cow.jpg', 'dist_01File': 'bread.jpg', 'dist_02File': 'plane.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'correct_ans': 'g'},
      {'promptFile': 'cow.jpg', 'correctFile': 'ant.jpg', 'dist_01File': 'banana.jpg', 'dist_02File': 'glasses.jpg', 'correct_pos': 'left', 'dist01_pos': 'right', 'dist02_pos': 'center', 'correct_ans': 'y'},
      {'promptFile': 'ant.jpg', 'correctFile': 'basket.jpg', 'dist_01File': 'axe.jpg', 'dist_02File': 'duck.jpg', 'correct_pos': 'center', 'dist01_pos': 'left', 'dist02_pos': 'right', 'correct_ans': 'r'},
      {'promptFile': 'basket.jpg', 'correctFile': 'bed.jpg', 'dist_01File': 'belt.jpg', 'dist_02File': 'bread.jpg', 'correct_pos': 'center', 'dist01_pos': 'right', 'dist02_pos': 'left', 'correct_ans': 'r'},
      {'promptFile': 'bed.jpg', 'correctFile': 'belt.jpg', 'dist_01File': 'anchor.jpg', 'dist_02File': 'desk.jpg', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'correct_ans': 'y'},
      {'promptFile': 'belt.jpg', 'correctFile': 'bird.jpg', 'dist_01File': 'ant.jpg', 'dist_02File': 'crocodile.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'correct_ans': 'g'},
      {'promptFile': 'bird.jpg', 'correctFile': 'axe.jpg', 'dist_01File': 'banana.jpg', 'dist_02File': 'baby_stroller.jpg', 'correct_pos': 'center', 'dist01_pos': 'left', 'dist02_pos': 'right', 'correct_ans': 'r'}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
    Routine choice_disp_learn
    Routine feedback_learn
  LoopTerminator practice_trials
  Routine instructions_start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequences/main_conditions_piloteditionxlsx.xlsx
    loopType = sequential
    nReps = 3
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    conditions:
      [{'promptFile': 'plane//plane_36.jpg', 'correctFile': 'car//car_13.jpg', 'dist_01File': 'jacket//jacket_38.jpg', 'dist_02File': 'pizza//pizza_18.jpg', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'promptTrig': 20, 'correctTrig': 6, 'dist_01Trig': 16, 'dist_02Trig': 19, 'correct_ans': 'left', 'learningSeq': 'A', 'currPosInSeq': 1, 'dist02SourceSeq': 'B'},
      {'promptFile': 'car//car_13.jpg', 'correctFile': 'house//house_35.jpg', 'dist_01File': 'hand//hand_29.jpg', 'dist_02File': 'hammer//hammer_03.jpg', 'correct_pos': 'center', 'dist01_pos': 'right', 'dist02_pos': 'left', 'promptTrig': 6, 'correctTrig': 15, 'dist_01Trig': 14, 'dist_02Trig': 13, 'correct_ans': 'center', 'learningSeq': 'A', 'currPosInSeq': 2, 'dist02SourceSeq': 'B'},
      {'promptFile': 'house//house_35.jpg', 'correctFile': 'bug//bug_27.jpg', 'dist_01File': 'book//book_15.jpg', 'dist_02File': 'fish//fish_13.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'promptTrig': 15, 'correctTrig': 5, 'dist_01Trig': 10, 'dist_02Trig': 11, 'correct_ans': 'right', 'learningSeq': 'A', 'currPosInSeq': 3, 'dist02SourceSeq': 'B'},
      {'promptFile': 'bug//bug_27.jpg', 'correctFile': 'book//book_15.jpg', 'dist_01File': 'jacket//jacket_38.jpg', 'dist_02File': 'coffee//coffee_40.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'promptTrig': 5, 'correctTrig': 10, 'dist_01Trig': 16, 'dist_02Trig': 8, 'correct_ans': 'right', 'learningSeq': 'A', 'currPosInSeq': 4, 'dist02SourceSeq': 'C'}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
    Routine set_tracking_parameters
    Routine choice_display
    Routine feedback
    Routine task_break
  LoopTerminator trials
  Routine instructions_end
